PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = oct30exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        target_stim = ['images/green_alien.png', 'images/red_alien.png'] #list of possible target colours

        #shuffle the list
        shuffle(target_stim)

        #pick a target stim
        tImage = target_stim[0]

        thisExp.addData('Target image', tImage)
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    ImageComponent cue
      image = images/rocket.png
      ori [set every repeat] = cue_ori
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent target
      image [set every repeat] = $tImage
      ori [set every repeat] = 0
      pos [set every repeat] = (target_x, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.6
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    KeyboardComponent target_resp
      allowedKeys = 'y','n','left','right','space'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      storeCorrect = True
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  Routine instructions
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    TextComponent inst_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the button associated with the side the target is on. 
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    KeyboardComponent start_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if target_resp.corr == 1:
            fb_image_stim = 'images/star.png'
        else:
            fb_image_stim = 'images/asteroid.png'
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    ImageComponent fbimage
      image [set every repeat] = $fb_image_stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = spreadsheets/blocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'block_file': 'spreadsheets/green_alien_block.xlsx'},
      {'block_file': 'spreadsheets/red_alien_block.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block_file
      loopType = random
      nReps = 5
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      conditions:
        [{'target_image': 'images/green_alien.png', 'cue_ori': 90, 'target_x': -0.5, 'condition': 'incongruent', 'answer': 'left'},
        {'target_image': 'images/green_alien.png', 'cue_ori': 270, 'target_x': 0.5, 'condition': 'incongruent', 'answer': 'right'},
        {'target_image': 'images/green_alien.png', 'cue_ori': 90, 'target_x': 0.5, 'condition': 'congruent', 'answer': 'right'},
        {'target_image': 'images/green_alien.png', 'cue_ori': 270, 'target_x': -0.5, 'condition': 'congruent', 'answer': 'left'}]
      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
